PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'session': '001', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = cm
  Window size (pixels) = [1440, 900]
  expName = newnewnew
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Routines
  Routine FoodReward
    CodeComponent Skipfoodreward
      Code Type = Py
      Each Frame:
        if skipfoodreward:
            continueRoutine = False

        if rewarded == 'yes':
            if rewardedtrial_nopeckmade:
                continueRoutine = False #if no peck was made on a rewarded trial do not give food reward
    CodeComponent codeforfood
      Code Type = Py
      Begin Routine:
        feeder_open = False
      Each Frame:
        #if FeederOpening.status == STARTED:
        #    if not feeder_open:
        #        feeder_open = True
        #        feeder_start = t # current time
        #        servo.setAccel(0,-2)      #set servo 0 acceleration to -2
        #        servo.setTarget(0,4500)  #move servo to feed position
        #        servo.setAccel(10,-2)      #turn light on
        #        servo.setTarget(10,6000)   #turn light on

        #if FeederClosing.status == STARTED:
        #    servo.setAccel(0,-2)      #set servo 0 acceleration to -2
        #    servo.setTarget(0,6000)  #move servo to resting position
        #    servo.setAccel(10,-2) #turn light off
        #    servo.setTarget(10,4500) #turn light off
        #    servo.close
        #    feeder_open = False
    TextComponent FeederOpening
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Feeder Opening
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    TextComponent FeederClosing
      letterHeight = 0
      pos = (0, -4)
      startVal [time (s)] = 3
      stopVal [duration (s)] = .2
      text = Feeder Closing
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  Routine Press_Space_to_Begin
    TextComponent text_3
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      text = Press Space Bar to Begin
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        #event.Mouse(visible = False) #remove hashtag to make mouse invisible
  Routine ITI_2
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti_time
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    CodeComponent code_7
      Code Type = Py
      Each Frame:
        #servo.setAccel(0,-2)      #set servo 0 acceleration to -2
        #servo.setTarget(0,7000)  #move servo to resting position
        #servo.setAccel(11,-2)      #set servo 0 acceleration to -4
        #servo.setTarget(11,3000)
        #servo.close

        #ensures servo is in resting postition during ITI



        #win.mouseVisible = False #remove to make mouse visble
  Routine Slide_One_Servo_Info
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import serial
        from sys import version_info

        PY2 = version_info[0] == 2   #Running Python 2.x?

        #
        #---------------------------
        # Maestro Servo Controller
        #---------------------------
        #
        # Support for the Pololu Maestro line of servo controllers
        #
        # Steven Jacobs -- Aug 2013
        # https://github.com/FRC4564/Maestro/
        #
        # These functions provide access to many of the Maestro's capabilities using the
        # Pololu serial protocol
        #
        class Controller:
            # When connected via USB, the Maestro creates two virtual serial ports
            # /dev/ttyACM0 for commands and /dev/ttyACM1 for communications.
            # Be sure the Maestro is configured for "USB Dual Port" serial mode.
            # "USB Chained Mode" may work as well, but hasn't been tested.
            #
            # Pololu protocol allows for multiple Maestros to be connected to a single
            # serial port. Each connected device is then indexed by number.
            # This device number defaults to 0x0C (or 12 in decimal), which this module
            # assumes.  If two or more controllers are connected to different serial
            # ports, or you are using a Windows OS, you can provide the tty port.  For
            # example, '/dev/ttyACM2' or for Windows, something like 'COM3'.
            def __init__(self,ttyStr='/dev/ttyACM0',device=0x0c):
                # Open the command port
                self.usb = serial.Serial(ttyStr)
                # Command lead-in and device number are sent for each Pololu serial command.
                self.PololuCmd = chr(0xaa) + chr(device)
                # Track target position for each servo. The function isMoving() will
                # use the Target vs Current servo position to determine if movement is
                # occuring.  Upto 24 servos on a Maestro, (0-23). Targets start at 0.
                self.Targets = [0] * 24
                # Servo minimum and maximum targets can be restricted to protect components.
                self.Mins = [0] * 24
                self.Maxs = [0] * 24

            # Cleanup by closing USB serial port
            def close(self):
                self.usb.close()

            # Send a Pololu command out the serial port
            def sendCmd(self, cmd):
                cmdStr = self.PololuCmd + cmd
                if PY2:
                    self.usb.write(cmdStr)
                else:
                    self.usb.write(bytes(cmdStr,'latin-1'))

            # Set channels min and max value range.  Use this as a safety to protect
            # from accidentally moving outside known safe parameters. A setting of 0
            # allows unrestricted movement.
            #
            # ***Note that the Maestro itself is configured to limit the range of servo travel
            # which has precedence over these values.  Use the Maestro Control Center to configure
            # ranges that are saved to the controller.  Use setRange for software controllable ranges.
            def setRange(self, chan, min, max):
                self.Mins[chan] = min
                self.Maxs[chan] = max

            # Return Minimum channel range value
            def getMin(self, chan):
                return self.Mins[chan]

            # Return Maximum channel range value
            def getMax(self, chan):
                return self.Maxs[chan]

            # Set channel to a specified target value.  Servo will begin moving based
            # on Speed and Acceleration parameters previously set.
            # Target values will be constrained within Min and Max range, if set.
            # For servos, target represents the pulse width in of quarter-microseconds
            # Servo center is at 1500 microseconds, or 6000 quarter-microseconds
            # Typcially valid servo range is 3000 to 9000 quarter-microseconds
            # If channel is configured for digital output, values < 6000 = Low ouput
            def setTarget(self, chan, target):
                # if Min is defined and Target is below, force to Min
                if self.Mins[chan] > 0 and target < self.Mins[chan]:
                    target = self.Mins[chan]
                # if Max is defined and Target is above, force to Max
                if self.Maxs[chan] > 0 and target > self.Maxs[chan]:
                    target = self.Maxs[chan]
                #
                lsb = target & 0x7f #7 bits for least significant byte
                msb = (target >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x04) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)
                # Record Target value
                self.Targets[chan] = target

            # Set speed of channel
            # Speed is measured as 0.25microseconds/10milliseconds
            # For the standard 1ms pulse width change to move a servo between extremes, a speed
            # of 1 will take 1 minute, and a speed of 60 would take 1 second.
            # Speed of 0 is unrestricted.
            def setSpeed(self, chan, speed):
                lsb = speed & 0x7f #7 bits for least significant byte
                msb = (speed >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x07) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Set acceleration of channel
            # This provide soft starts and finishes when servo moves to target position.
            # Valid values are from 0 to 255. 0=unrestricted, 1 is slowest start.
            # A value of 1 will take the servo about 3s to move between 1ms to 2ms range.
            def setAccel(self, chan, accel):
                lsb = accel & 0x7f #7 bits for least significant byte
                msb = (accel >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x09) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Get the current position of the device on the specified channel
            # The result is returned in a measure of quarter-microseconds, which mirrors
            # the Target parameter of setTarget.
            # This is not reading the true servo position, but the last target position sent
            # to the servo. If the Speed is set to below the top speed of the servo, then
            # the position result will align well with the acutal servo position, assuming
            # it is not stalled or slowed.
            def getPosition(self, chan):
                cmd = chr(0x10) + chr(chan)
                self.sendCmd(cmd)
                lsb = ord(self.usb.read())
                msb = ord(self.usb.read())
                return (msb << 8) + lsb

            # Test to see if a servo has reached the set target position.  This only provides
            # useful results if the Speed parameter is set slower than the maximum speed of
            # the servo.  Servo range must be defined first using setRange. See setRange comment.
            #
            # ***Note if target position goes outside of Maestro's allowable range for the
            # channel, then the target can never be reached, so it will appear to always be
            # moving to the target.
            def isMoving(self, chan):
                if self.Targets[chan] > 0:
                    if self.getPosition(chan) != self.Targets[chan]:
                        return True
                return False

            # Have all servo outputs reached their targets? This is useful only if Speed and/or
            # Acceleration have been set on one or more of the channels. Returns True or False.
            # Not available with Micro Maestro.
            def getMovingState(self):
                cmd = chr(0x13)
                self.sendCmd(cmd)
                if self.usb.read() == chr(0):
                    return False
                else:
                    return True

            # Run a Maestro Script subroutine in the currently active script. Scripts can
            # have multiple subroutines, which get numbered sequentially from 0 on up. Code your
            # Maestro subroutine to either infinitely loop, or just end (return is not valid).
            def runScriptSub(self, subNumber):
                cmd = chr(0x27) + chr(subNumber)
                # can pass a param with command 0x28
                # cmd = chr(0x28) + chr(subNumber) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Stop the current Maestro Script
            def stopScript(self):
                cmd = chr(0x24)
                self.sendCmd(cmd)
      Begin Routine:
        win.mouseVisible = True
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = ______
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  Routine Slide_Two_Move_Servo_to_Rest
    CodeComponent importmaestro
      Code Type = Py
      Begin Experiment:
        import maestro
        servo = maestro.Controller('COM3')
        servo.setAccel(0,-2)      #set servo 0 acceleration to -4
        servo.setTarget(0,7000)
        servo.setAccel(11,-2)      #set servo 0 acceleration to -4
        servo.setTarget(11,3000)

        win.mouseVisible = False
      Begin Routine:
        win.mouseVisible = False
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ...
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  Routine End_of_experiment
    TextComponent text_5
      letterHeight = 0.8
      startVal [time (s)] = 0.0
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      text:
        End of Experiment
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_8
      Code Type = Py
  Routine Go_No_Go
    CodeComponent code4response
      Code Type = Py
      Begin Routine:
        skipfoodreward = False #don't automatically skip the food reward

        if rewarded == 'yes':
            rewardedtrial_nopeckmade = True #assume no peck is made on rewarded trial
      Each Frame:
        if rewarded == 'yes': #determined by excel file
            if mouse.isPressedIn(FoodKey_Area):
                rewardedtrial_nopeckmade = False #a peck has been made to the food key
                continueRoutine = False #end the current routine and  go to food reward

        if rewarded == 'no': #determined by excel file
            if mouse.isPressedIn(FoodKey_Area):
                skipfoodreward = True #skip over the food reward routine
                continueRoutine = False #end this routine
            if mouse.isPressedIn(background) and not mouse.isPressedIn(FoodKey_Area):
                skipfoodreward = False #if you want to penalize all incorrect responses (not just those to key) change this to True.
                continueRoutine = True #if you want to penalize all incorrect responses (not just those to key) change this to False.


        if t > 10:
            continueRoutine = False #if the routine goes over 10s, end routine
    CodeComponent code4data
      Code Type = Py
      Each Frame:
        if mouse.isPressedIn(background) and not (mouse.isPressedIn(FoodKey_Area)):
            thisExp.addData('mouseTime',t)
            thisExp.addData('mouseposition', mouse.getPos())
            thisExp.addData('Location', "outside all stimuli")
            thisExp.nextEntry()
            while mouse.isPressedIn(background) and not (mouse.isPressedIn(FoodKey_Area)):
                continue

        elif (mouse.isPressedIn(FoodKey_Area)):
            thisExp.addData('mouseTime', t)
            thisExp.addData('mouseposition', mouse.getPos())
            thisExp.addData('Location', "in food key")
            thisExp.nextEntry()
            while (mouse.isPressedIn(FoodKey_Area)):
                continue

        if (mouse.isPressedIn(ColorStimulus)):
            thisExp.addData('mouseTime', t)
            thisExp.addData('mouseposition', mouse2.getPos())
            thisExp.addData('Location', "in color stimulus")
            thisExp.nextEntry()
            while (mouse.isPressedIn(ColorStimulus)):
                continue
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent FoodKey_Area
      fillColor = $[1,1,1]
      opacity = 0
      pos = (0, -7.5)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent FoodKey
      fillColor = white
      pos = (0, -7.5)
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent ColorStimulus
      fillColor [set every repeat] = $color
      nVertices = 100
      pos = (0, 0.25)
      shape = regular polygon...
      size = (6, 6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent background
      fillColor = $[1,1,1]
      opacity = 0
      shape = rectangle
      size = (500, 500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine Press_Space_to_Begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions_sample.xlsx
    loopType = random
    nReps = 12
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    conditions:
      [OrderedDict([('Trial', 'a'), ('color', 'Hotpink'), ('rewarded', 'yes'), ('iti_time', 3)]),
      OrderedDict([('Trial', 'b'), ('color', 'green'), ('rewarded', 'no'), ('iti_time', 3)])]
    Routine Go_No_Go
    Routine FoodReward
    Routine ITI_2
  LoopTerminator trials
  Routine End_of_experiment
