PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = cm
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Show mouse = True
  expName = newnewnew
  Screen = 1
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Routines
  Routine Moving_Stim
    PolygonComponent background
      fillColor = black
      stopVal [duration (s)] = .1
      units = cm
      startVal [time (s)] = 0.0
      size = (50, 40)
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    PolygonComponent out_circle
      opacity = 0
      fillColor = red
      stopVal [duration (s)] = .1
      pos [set every repeat] = $pos
      startVal [time (s)] = 0.0
      nVertices = 99
      size = (2, 2)
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    PolygonComponent target
      fillColor = White
      stopVal [duration (s)] = .1
      pos [set every repeat] = $pos
      units = cm
      startVal [time (s)] = 0.0
      nVertices = 99
      size = (0.5, 0.5)
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    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [duration (s)] = .1
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
    CodeComponent code
      Each Frame:
        if mouse.isPressedIn(out_circle):
            audio_FB.tStart = t
            audio_FB.frameNStart = frameN  # exact frame index
            audio_FB.play()  # start the sound (it finishes automatically)
            thisExp.addData('Time',t)
            thisExp.addData('Pos', mouse.getPos())
            thisExp.addData('In_Stim', 1)
            thisExp.nextEntry()
            continueRoutine = False
            Trial_A.finished=True
        while mouse.isPressedIn(out_circle):
                continue
        if mouse.isPressedIn(background) and not (mouse.isPressedIn(out_circle)):
            audio_FB.tStart = t
            audio_FB.frameNStart = frameN  # exact frame index
            audio_FB.play()  # start the sound (it finishes automatically)
            thisExp.addData('Time',t)
            thisExp.addData('Pos', mouse.getPos())
            thisExp.addData('In_Stim', 0)
            thisExp.nextEntry()
        while mouse.isPressedIn(background) and not (mouse.isPressedIn(out_circle)):
                    continue
    SoundComponent audio_FB
      sound = 1300
      stopVal [duration (s)] = .1
      startVal [condition] = 0.0
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  Routine Import_Servo
    TextComponent Import_servo
      text = ///
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_6
      Begin Experiment:
        import serial
        from sys import version_info

        PY2 = version_info[0] == 2   #Running Python 2.x?

        #
        #---------------------------
        # Maestro Servo Controller
        #---------------------------
        #
        # Support for the Pololu Maestro line of servo controllers
        #
        # Steven Jacobs -- Aug 2013
        # https://github.com/FRC4564/Maestro/
        #
        # These functions provide access to many of the Maestro's capabilities using the
        # Pololu serial protocol
        #
        class Controller:
            # When connected via USB, the Maestro creates two virtual serial ports
            # /dev/ttyACM0 for commands and /dev/ttyACM1 for communications.
            # Be sure the Maestro is configured for "USB Dual Port" serial mode.
            # "USB Chained Mode" may work as well, but hasn't been tested.
            #
            # Pololu protocol allows for multiple Maestros to be connected to a single
            # serial port. Each connected device is then indexed by number.
            # This device number defaults to 0x0C (or 12 in decimal), which this module
            # assumes.  If two or more controllers are connected to different serial
            # ports, or you are using a Windows OS, you can provide the tty port.  For
            # example, '/dev/ttyACM2' or for Windows, something like 'COM3'.
            def __init__(self,ttyStr='/dev/ttyACM0',device=0x0c):
                # Open the command port
                self.usb = serial.Serial(ttyStr)
                # Command lead-in and device number are sent for each Pololu serial command.
                self.PololuCmd = chr(0xaa) + chr(device)
                # Track target position for each servo. The function isMoving() will
                # use the Target vs Current servo position to determine if movement is
                # occuring.  Upto 24 servos on a Maestro, (0-23). Targets start at 0.
                self.Targets = [0] * 24
                # Servo minimum and maximum targets can be restricted to protect components.
                self.Mins = [0] * 24
                self.Maxs = [0] * 24

            # Cleanup by closing USB serial port
            def close(self):
                self.usb.close()

            # Send a Pololu command out the serial port
            def sendCmd(self, cmd):
                cmdStr = self.PololuCmd + cmd
                if PY2:
                    self.usb.write(cmdStr)
                else:
                    self.usb.write(bytes(cmdStr,'latin-1'))

            # Set channels min and max value range.  Use this as a safety to protect
            # from accidentally moving outside known safe parameters. A setting of 0
            # allows unrestricted movement.
            #
            # ***Note that the Maestro itself is configured to limit the range of servo travel
            # which has precedence over these values.  Use the Maestro Control Center to configure
            # ranges that are saved to the controller.  Use setRange for software controllable ranges.
            def setRange(self, chan, min, max):
                self.Mins[chan] = min
                self.Maxs[chan] = max

            # Return Minimum channel range value
            def getMin(self, chan):
                return self.Mins[chan]

            # Return Maximum channel range value
            def getMax(self, chan):
                return self.Maxs[chan]

            # Set channel to a specified target value.  Servo will begin moving based
            # on Speed and Acceleration parameters previously set.
            # Target values will be constrained within Min and Max range, if set.
            # For servos, target represents the pulse width in of quarter-microseconds
            # Servo center is at 1500 microseconds, or 6000 quarter-microseconds
            # Typcially valid servo range is 3000 to 9000 quarter-microseconds
            # If channel is configured for digital output, values < 6000 = Low ouput
            def setTarget(self, chan, target):
                # if Min is defined and Target is below, force to Min
                if self.Mins[chan] > 0 and target < self.Mins[chan]:
                    target = self.Mins[chan]
                # if Max is defined and Target is above, force to Max
                if self.Maxs[chan] > 0 and target > self.Maxs[chan]:
                    target = self.Maxs[chan]
                #
                lsb = target & 0x7f #7 bits for least significant byte
                msb = (target >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x04) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)
                # Record Target value
                self.Targets[chan] = target

            # Set speed of channel
            # Speed is measured as 0.25microseconds/10milliseconds
            # For the standard 1ms pulse width change to move a servo between extremes, a speed
            # of 1 will take 1 minute, and a speed of 60 would take 1 second.
            # Speed of 0 is unrestricted.
            def setSpeed(self, chan, speed):
                lsb = speed & 0x7f #7 bits for least significant byte
                msb = (speed >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x07) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Set acceleration of channel
            # This provide soft starts and finishes when servo moves to target position.
            # Valid values are from 0 to 255. 0=unrestricted, 1 is slowest start.
            # A value of 1 will take the servo about 3s to move between 1ms to 2ms range.
            def setAccel(self, chan, accel):
                lsb = accel & 0x7f #7 bits for least significant byte
                msb = (accel >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x09) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Get the current position of the device on the specified channel
            # The result is returned in a measure of quarter-microseconds, which mirrors
            # the Target parameter of setTarget.
            # This is not reading the true servo position, but the last target position sent
            # to the servo. If the Speed is set to below the top speed of the servo, then
            # the position result will align well with the acutal servo position, assuming
            # it is not stalled or slowed.
            def getPosition(self, chan):
                cmd = chr(0x10) + chr(chan)
                self.sendCmd(cmd)
                lsb = ord(self.usb.read())
                msb = ord(self.usb.read())
                return (msb << 8) + lsb

            # Test to see if a servo has reached the set target position.  This only provides
            # useful results if the Speed parameter is set slower than the maximum speed of
            # the servo.  Servo range must be defined first using setRange. See setRange comment.
            #
            # ***Note if target position goes outside of Maestro's allowable range for the
            # channel, then the target can never be reached, so it will appear to always be
            # moving to the target.
            def isMoving(self, chan):
                if self.Targets[chan] > 0:
                    if self.getPosition(chan) != self.Targets[chan]:
                        return True
                return False

            # Have all servo outputs reached their targets? This is useful only if Speed and/or
            # Acceleration have been set on one or more of the channels. Returns True or False.
            # Not available with Micro Maestro.
            def getMovingState(self):
                cmd = chr(0x13)
                self.sendCmd(cmd)
                if self.usb.read() == chr(0):
                    return False
                else:
                    return True

            # Run a Maestro Script subroutine in the currently active script. Scripts can
            # have multiple subroutines, which get numbered sequentially from 0 on up. Code your
            # Maestro subroutine to either infinitely loop, or just end (return is not valid).
            def runScriptSub(self, subNumber):
                cmd = chr(0x27) + chr(subNumber)
                # can pass a param with command 0x28
                # cmd = chr(0x28) + chr(subNumber) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Stop the current Maestro Script
            def stopScript(self):
                cmd = chr(0x24)
                self.sendCmd(cmd)
  Routine ITI
    PolygonComponent invisible
      opacity [set every repeat] = 1
      fillColor = black
      stopVal [duration (s)] = $ITI_time
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      size = (50, 50)
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  Routine Press_Space
    TextComponent FirstRoutine
      startVal [time (s)] = 0.0
      letterHeight = 1.2
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      text:
        You are about to begin an experiment. Please turn off your cell phone and place it somewhere out of sight.

        When you are ready to begin, please press the "Space" bar
    KeyboardComponent PressSpace
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Beginning_Set_Up
    CodeComponent code_5
      Begin Experiment:
        import maestro
        servo = maestro.Controller('COM4')
        servo.setAccel(0,-2)      #set servo 0 acceleration to -4
        servo.setTarget(0,6000)
    TextComponent import_maestro
      text = ...
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Reward
    PolygonComponent background_4
      fillColor = black
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      size = (50, 40)
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    TextComponent FeederOpen
      text = Feeder Is Open
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 2
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    TextComponent FeederClosed
      text = Feeder is Closing
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 1.5
      letterHeight = 2
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    CodeComponent code_4
      Begin Routine:
        feeder_open = False
      Each Frame:
        #if FeederOpen.status == STARTED:
            #if not feeder_open:
                #feeder_open = True
                #feeder_start = t # current time
                #servo.setAccel(0,-2)      #set servo 0 acceleration to -2
                #servo.setTarget(0,4500)  #move servo to feed
        #servo settings are touchy, these will probably need altering to your specifics

        #if FeederClosed.status == STARTED:
            #servo.setAccel(0,-2)      #set servo 0 acceleration to -2
            #servo.setTarget(0,6000)  #move servo to resting position
            #servo.close
            #feeder_open = False
  Routine Moving_Stim_2
    PolygonComponent background_2
      fillColor = black
      stopVal [duration (s)] = .1
      units = cm
      startVal [time (s)] = 0.0
      size = (50, 40)
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    PolygonComponent out_circle_2
      opacity = 0
      fillColor = red
      stopVal [duration (s)] = .1
      pos [set every repeat] = $pos
      startVal [time (s)] = 0.0
      nVertices = 99
      size = (2, 2)
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    PolygonComponent target_2
      fillColor = White
      stopVal [duration (s)] = .1
      pos [set every repeat] = $pos
      units = cm
      startVal [time (s)] = 0.0
      nVertices = 99
      size = (0.5, 0.5)
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    MouseComponent mouse_2
      timeRelativeTo = routine
      stopVal [duration (s)] = .1
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
    CodeComponent code_2
      Each Frame:
        if mouse_2.isPressedIn(out_circle_2):
            audio_FB2.tStart = t
            audio_FB2.frameNStart = frameN  # exact frame index
            audio_FB2.play()  # start the sound (it finishes automatically)
            thisExp.addData('Time',t)
            thisExp.addData('Pos', mouse_2.getPos())
            thisExp.addData('In_Stim', 1)
            thisExp.nextEntry()
            continueRoutine = False
            Trial_B.finished=True
        while mouse_2.isPressedIn(out_circle_2):
            continue
        if mouse_2.isPressedIn(background_2) and not (mouse_2.isPressedIn(out_circle_2)):
            audio_FB2.tStart = t
            audio_FB2.frameNStart = frameN  # exact frame index
            audio_FB2.play()  # start the sound (it finishes automatically)
            thisExp.addData('Time',t)
            thisExp.addData('Pos', mouse_2.getPos())
            thisExp.addData('In_Stim', 0)
            thisExp.nextEntry()
        while mouse_2.isPressedIn(background_2) and not (mouse_2.isPressedIn(out_circle_2)):
            continue
    SoundComponent audio_FB2
      sound = 1300
      stopVal [duration (s)] = .1
      startVal [condition] = 0.0
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  Routine Moving_Stim_3
    PolygonComponent background_3
      fillColor = black
      stopVal [duration (s)] = .1
      units = cm
      startVal [time (s)] = 0.0
      size = (50, 40)
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    PolygonComponent out_circle_3
      opacity = 0
      fillColor = red
      stopVal [duration (s)] = .1
      pos [set every repeat] = $pos
      startVal [time (s)] = 0.0
      nVertices = 99
      size = (2, 2)
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    PolygonComponent target_3
      fillColor = White
      stopVal [duration (s)] = .1
      pos [set every repeat] = $pos
      units = cm
      startVal [time (s)] = 0.0
      nVertices = 99
      size = (0.5, 0.5)
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    MouseComponent mouse_3
      timeRelativeTo = routine
      stopVal [duration (s)] = .1
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
    CodeComponent code_3
      Each Frame:
        if mouse_3.isPressedIn(out_circle_3):
            audio_FB3.tStart = t
            audio_FB3.frameNStart = frameN  # exact frame index
            audio_FB3.play()  # start the sound (it finishes automatically)
            thisExp.addData('Time',t)
            thisExp.addData('Pos', mouse_3.getPos())
            thisExp.addData('In_Stim', 1)
            thisExp.nextEntry()
            continueRoutine = False
            Trial_C.finished=True
        while mouse_3.isPressedIn(out_circle_3):
                continue
        if mouse.isPressedIn(background_3) and not (mouse_3.isPressedIn(out_circle_3)):
            audio_FB3.tStart = t
            audio_FB3.frameNStart = frameN  # exact frame index
            audio_FB3.play()  # start the sound (it finishes automatically)
            thisExp.addData('Time',t)
            thisExp.addData('Pos', mouse_3.getPos())
            thisExp.addData('In_Stim', 0)
            thisExp.nextEntry()
        while mouse_3.isPressedIn(background_3) and not (mouse_3.isPressedIn(out_circle_3)):
                    continue
    SoundComponent audio_FB3
      sound = 1300
      stopVal [duration (s)] = .1
      startVal [condition] = 0.0
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Flow
  LoopInitiator Main_Loop loopType="TrialHandler"
    loopType = random
    nReps = 2
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    LoopInitiator Path_A loopType="TrialHandler"
      conditionsFile = ITI_time.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ITI_time': 4},
        {'ITI_time': 6},
        {'ITI_time': 8}]
      LoopInitiator Trial_A loopType="TrialHandler"
        conditionsFile = Path_1.xlsx
        loopType = sequential
        nReps = 2
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        conditions:
          [{'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.0, 'pos': [0, 0], 'z': [0, 0]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.10000000000000001, 'pos': [0, 0.1], 'z': [0, 0.1]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.20000000000000001, 'pos': [0, 0.2], 'z': [0, 0.2]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.30000000000000004, 'pos': [0, 0.3], 'z': [0, 0.3]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.40000000000000002, 'pos': [0, 0.4], 'z': [0, 0.4]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.5, 'pos': [0, 0.5], 'z': [0, 0.5]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.59999999999999998, 'pos': [0, 0.6], 'z': [0, 0.6]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.69999999999999996, 'pos': [0, 0.7], 'z': [0, 0.7]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.79999999999999993, 'pos': [0, 0.8], 'z': [0, 0.8]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.89999999999999991, 'pos': [0, 0.9], 'z': [0, 0.9]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.99999999999999989, 'pos': [0, 1], 'z': [0, 1]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 1.0999999999999999, 'pos': [0, 1.1], 'z': [0, 1.1]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 1.2, 'pos': [0, 1.2], 'z': [0, 1.2]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 1.3, 'pos': [0, 1.3], 'z': [0, 1.3]},
          {'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 1.4000000000000001, 'pos': [0, 1.4], 'z': [0, 1.4]}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
        Routine Moving_Stim
      LoopTerminator Trial_A
      Routine Reward
      Routine ITI
    LoopTerminator Path_A
    LoopInitiator Path_B loopType="TrialHandler"
      conditionsFile = ITI_time.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ITI_time': 4},
        {'ITI_time': 6},
        {'ITI_time': 8}]
      LoopInitiator Trial_B loopType="TrialHandler"
        conditionsFile = Path_2.xlsx
        loopType = sequential
        nReps = 2
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        conditions:
          [{'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.0, 'pos': [0, 0], 'z': [0, 0]},
          {'a': u'[', 'c': u', ', 'b': 0.10000000000000001, 'e': u']', 'd': 0.10000000000000001, 'pos': [0.1, 0.1], 'z': [0.1, 0.1]},
          {'a': u'[', 'c': u', ', 'b': 0.20000000000000001, 'e': u']', 'd': 0.20000000000000001, 'pos': [0.2, 0.2], 'z': [0.2, 0.2]},
          {'a': u'[', 'c': u', ', 'b': 0.30000000000000004, 'e': u']', 'd': 0.30000000000000004, 'pos': [0.3, 0.3], 'z': [0.3, 0.3]},
          {'a': u'[', 'c': u', ', 'b': 0.40000000000000002, 'e': u']', 'd': 0.40000000000000002, 'pos': [0.4, 0.4], 'z': [0.4, 0.4]},
          {'a': u'[', 'c': u', ', 'b': 0.5, 'e': u']', 'd': 0.5, 'pos': [0.5, 0.5], 'z': [0.5, 0.5]},
          {'a': u'[', 'c': u', ', 'b': 0.59999999999999998, 'e': u']', 'd': 0.59999999999999998, 'pos': [0.6, 0.6], 'z': [0.6, 0.6]},
          {'a': u'[', 'c': u', ', 'b': 0.69999999999999996, 'e': u']', 'd': 0.69999999999999996, 'pos': [0.7, 0.7], 'z': [0.7, 0.7]},
          {'a': u'[', 'c': u', ', 'b': 0.79999999999999993, 'e': u']', 'd': 0.79999999999999993, 'pos': [0.8, 0.8], 'z': [0.8, 0.8]},
          {'a': u'[', 'c': u', ', 'b': 0.89999999999999991, 'e': u']', 'd': 0.89999999999999991, 'pos': [0.9, 0.9], 'z': [0.9, 0.9]},
          {'a': u'[', 'c': u', ', 'b': 0.99999999999999989, 'e': u']', 'd': 0.99999999999999989, 'pos': [1, 1], 'z': [1, 1]},
          {'a': u'[', 'c': u', ', 'b': 1.0999999999999999, 'e': u']', 'd': 1.0999999999999999, 'pos': [1.1, 1.1], 'z': [1.1, 1.1]},
          {'a': u'[', 'c': u', ', 'b': 1.2, 'e': u']', 'd': 1.2, 'pos': [1.2, 1.2], 'z': [1.2, 1.2]}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
        Routine Moving_Stim_2
      LoopTerminator Trial_B
      Routine Reward
      Routine ITI
    LoopTerminator Path_B
    LoopInitiator Path_C loopType="TrialHandler"
      conditionsFile = ITI_time.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'ITI_time': 4},
        {'ITI_time': 6},
        {'ITI_time': 8}]
      LoopInitiator Trial_C loopType="TrialHandler"
        conditionsFile = Path_3.xlsx
        loopType = sequential
        nReps = 2
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        conditions:
          [{'a': u'[', 'c': u', ', 'b': 0.0, 'e': u']', 'd': 0.0, 'pos': [0, 0], 'z': [0, 0]},
          {'a': u'[', 'c': u', ', 'b': -0.10000000000000001, 'e': u']', 'd': -0.10000000000000001, 'pos': [-0.1, -0.1], 'z': [-0.1, -0.1]},
          {'a': u'[', 'c': u', ', 'b': -0.20000000000000001, 'e': u']', 'd': -0.20000000000000001, 'pos': [-0.2, -0.2], 'z': [-0.2, -0.2]},
          {'a': u'[', 'c': u', ', 'b': -0.30000000000000004, 'e': u']', 'd': -0.30000000000000004, 'pos': [-0.3, -0.3], 'z': [-0.3, -0.3]},
          {'a': u'[', 'c': u', ', 'b': -0.40000000000000002, 'e': u']', 'd': -0.40000000000000002, 'pos': [-0.4, -0.4], 'z': [-0.4, -0.4]},
          {'a': u'[', 'c': u', ', 'b': -0.5, 'e': u']', 'd': -0.5, 'pos': [-0.5, -0.5], 'z': [-0.5, -0.5]},
          {'a': u'[', 'c': u', ', 'b': -0.59999999999999998, 'e': u']', 'd': -0.59999999999999998, 'pos': [-0.6, -0.6], 'z': [-0.6, -0.6]},
          {'a': u'[', 'c': u', ', 'b': -0.69999999999999996, 'e': u']', 'd': -0.69999999999999996, 'pos': [-0.7, -0.7], 'z': [-0.7, -0.7]},
          {'a': u'[', 'c': u', ', 'b': -0.79999999999999993, 'e': u']', 'd': -0.79999999999999993, 'pos': [-0.8, -0.8], 'z': [-0.8, -0.8]},
          {'a': u'[', 'c': u', ', 'b': -0.89999999999999991, 'e': u']', 'd': -0.89999999999999991, 'pos': [-0.9, -0.9], 'z': [-0.9, -0.9]},
          {'a': u'[', 'c': u', ', 'b': -0.99999999999999989, 'e': u']', 'd': -0.99999999999999989, 'pos': [-1, -1], 'z': [-1, -1]},
          {'a': u'[', 'c': u', ', 'b': -1.0999999999999999, 'e': u']', 'd': -1.0999999999999999, 'pos': [-1.1, -1.1], 'z': [-1.1, -1.1]}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
        Routine Moving_Stim_3
      LoopTerminator Trial_C
      Routine Reward
      Routine ITI
    LoopTerminator Path_C
  LoopTerminator Main_Loop
