PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = cm
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  expName = newnewnew
  Screen = 1
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Routines
  Routine BeginningFood
    PolygonComponent Session_Start_Key
      fillColor = white
      stopVal [duration (s)] = 15
      startVal [time (s)] = 0.0
      nVertices = 3
      size = [.2, .2]
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    CodeComponent code4food_3
      Begin Routine:
        #feeder_open = False
        #win.mouseVisible = False
      Each Frame:
        if Session_Start_Key.status == STARTED and t >= frameRemains:
            continueRoutine = False

        #if FeederOpening_3.status == STARTED:
        #    if not feeder_open:
        #        feeder_open = True
        #        feeder_start = t # current time
        #        servo.setAccel(0,-2)      #set servo 0 acceleration to -2
        #        servo.setTarget(0,4500)  #move servo to feed
        #        servo.setAccel(10,-2)      #set servo 0 acceleration to -4
        #        servo.setTarget(10,6000)
        #if FeederClosing_3.status == STARTED:
        #    servo.setAccel(0,-2)      #set servo 0 acceleration to -2
        #    servo.setTarget(0,6000)  #move servo to resting position
        #    servo.setAccel(10,-2)      #set servo 0 acceleration to -4
        #    servo.setTarget(10,4500)
        #    servo.close
        #    feeder_open = False
    TextComponent FeederOpening_3
      color = blue
      stopVal [duration (s)] = 12
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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      text:
        Feeder Is Open and Light is On
    TextComponent FeederClosing_3
      color = blue
      text = Feeder Closing
      stopVal [duration (s)] = 3
      startVal [time (s)] = 12
      letterHeight = 0.3
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  Routine experiment_over
    TextComponent FirstRoutine_2
      text = The experiment is over. Please place bird back in cage and press the escape button to close the program. X out of the error messages and tally the day on the wall.
      stopVal [duration (s)] = 2500
      startVal [time (s)] = 0.0
      letterHeight = 1
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  Routine ITI
    PolygonComponent ITI_TargetStimulus
      opacity [set every repeat] = 0
      fillColor = white
      stopVal [duration (s)] = $ITI_time
      pos = (0, .75)
      startVal [time (s)] = 0.0
      nVertices = 99897
      size = (0.2, 0.2)
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  Routine Blackscreen
    TextComponent nothing
      stopVal [duration (s)] = $ITI_TIME
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine DS
    CodeComponent Code4TextResponse
      Begin Routine:
        #feeder_open = False
        #skipfoodreward = False
      Each Frame:
        #if Code4Response == 'Yes':
        #    skipfoodreward = False
        #    # open feeder if not already open:
        #    if mouseA.isPressedIn(TargetStimulusA):
        #        if not feeder_open:
        #            feeder_open = True
        #            feeder_start = t # current time
        #            FeederOpen.tStart = t # in replace of servo command
        #            FeederOpen.frameNStart = frameN  # in replace of servo command
        #            FeederOpen.setAutoDraw(True) # in replace of servo command
        #        else:
        #            feeder_start = t
        #    if feeder_open and t - feeder_start > 1.5:
        #        FeederClose.tStart = t # in replace of servo command
        #        FeederClose.frameNStart = frameN # in replace of servo command
        #        FeederClose.setAutoDraw(True) # in replace of servo command
        #        feeder_open = False
        #if Code4Response == 'No':
        #    skipfoodreward = True
    CodeComponent Code4Response
      Begin Routine:
        feeder_open = False
        skipfoodreward = False
        win.mouseVisible = False
      Each Frame:
        if Code4Response == 'Yes':
            skipfoodreward = False
        #open feeder if not already open:
            if mouseA.isPressedIn(TargetStimulusA):
                if not feeder_open:
                    feeder_open = True
                    feeder_start = t # current time
                    servo.setAccel(0,-2)      #set servo 0 acceleration to 4
                    servo.setTarget(0,4500)  #move servo to feed
                    servo.setAccel(10,-2)      #set servo 0 acceleration to -4
                    servo.setTarget(10,6000)
                else:
                    feeder_start = t
            if feeder_open and t - feeder_start > 3:
                    servo.setAccel(0,-2)      #set servo 0 acceleration to 4
                    servo.setTarget(0,6000)  #move servo to feed
                    servo.setAccel(10,-2)      #set servo 0 acceleration to -4
                    servo.setTarget(10,4500)
                    feeder_open = False
        if Code4Response == 'No':
            skipfoodreward = True
    CodeComponent Code4Data
      Each Frame:
        if mouseA.isPressedIn(background_2) and not (mouseA.isPressedIn(TargetStimulusA)):
            thisExp.addData('mouseArTime',t)
            thisExp.addData('mouseArposition', mouseA.getPos())
            thisExp.addData('InstimulusAr', 0)
            thisExp.nextEntry()
            while mouseA.isPressedIn(background_2) and not (mouseA.isPressedIn(TargetStimulusA)):
                continue

        elif (mouseA.isPressedIn(TargetStimulusA)):
            thisExp.addData('mouseArTime', t)
            thisExp.addData('mouseArposition', mouseA.getPos())
            thisExp.addData('InstimulusAr', 1)
            thisExp.nextEntry()
            while (mouseA.isPressedIn(TargetStimulusA)):
                continue
    PolygonComponent CueA
      fillColor [set every repeat] = $Cuecolor
      stopVal [duration (s)] = 20
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      size = (1.5, 1.5)
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    PolygonComponent TargetStimulusA
      opacity [set every repeat] = $TargetStimulusOpacity
      fillColor = white
      stopVal [duration (s)] = 20
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      nVertices = 99897
      size = (0.2, 0.2)
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    MouseComponent mouseA
      timeRelativeTo = experiment
      stopVal [duration (s)] = 20
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = never
    PolygonComponent background_2
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      size = (3.5, 3.5)
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    TextComponent FeederOpen
      text = Feeder Opening
      stopVal [duration (s)] = 1.5
      startVal [condition] = 0.0
      letterHeight = 0.1
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    TextComponent FeederClose
      text = Feeder Close
      stopVal [duration (s)] = 1.5
      pos = (0, -.1)
      startVal [condition] = 0.0
      letterHeight = 0.1
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  Routine AutoshapeFoodReward
    CodeComponent skipfoodreward
      Begin Routine:
        if skipfoodreward:
            continueRoutine = False
    CodeComponent code4food_2
      Begin Routine:
        feeder_open = False
      Each Frame:
        if FeederOpening_2.status == STARTED:
            if not feeder_open:
                feeder_open = True
                feeder_start = t # current time
                servo.setAccel(0,-2)      #set servo 0 acceleration to -2
                servo.setTarget(0,4500)  #move servo to feed
                servo.setAccel(10,-2)      #set servo 0 acceleration to -4
                servo.setTarget(10,6000)

        if FeederClosing_2.status == STARTED:
            servo.setAccel(0,-2)      #set servo 0 acceleration to -2
            servo.setTarget(0,6000)  #move servo to resting position
            servo.setAccel(10,-2)      #set servo 0 acceleration to -4
            servo.setTarget(10,4500)
            servo.close
            feeder_open = False
    TextComponent FeederOpening_2
      text = Feeder Opening
      stopVal [duration (s)] = 3
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      letterHeight = 0.0
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    TextComponent FeederClosing_2
      text = Feeder Closing
      stopVal [duration (s)] = 1
      startVal [time (s)] = 3
      letterHeight = 0.0
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    PolygonComponent DummyTS_2
      fillColor = white
      stopVal [duration (s)] = 4
      pos = (0, -.75)
      startVal [time (s)] = 0.0
      nVertices = 99897
      size = (0.2, 0.2)
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  Routine Square_Presented
    CodeComponent Code4Data_2
      Begin Routine:
        #win.mouseVisible = False
      Each Frame:
        if mouseA_2.isPressedIn(background) and not (mouseA_2.isPressedIn(SurroundingArea_2)):
            thisExp.addData('mouseArTime',t)
            thisExp.addData('mouseArposition', mouseA_2.getPos())
            thisExp.addData('InstimulusAr', 0)
            thisExp.nextEntry()
            while mouseA_2.isPressedIn(background) and not (mouseA_2.isPressedIn(SurroundingArea_2)):
                continue

        elif (mouseA_2.isPressedIn(SurroundingArea_2)):
            continueRoutine = False
            thisExp.addData('mouseArTime', t)
            thisExp.addData('mouseArposition', mouseA_2.getPos())
            thisExp.addData('InstimulusAr', 1)
            thisExp.nextEntry()
            while (mouseA_2.isPressedIn(SurroundingArea_2)):
                continue
    PolygonComponent SurroundingArea_2
      opacity = 0
      fillColor = red
      stopVal [duration (s)] = 20
      pos [set every repeat] = $position
      startVal [time (s)] = 0.0
      size [set every repeat] = (5.5, 5.5)
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    PolygonComponent TargetStimulusA_2
      opacity [set every repeat] = 1
      fillColor = white
      stopVal [duration (s)] = 20
      pos [set every repeat] = $position
      startVal [time (s)] = 0.0
      size [set every repeat] = (2, 2)
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    PolygonComponent background
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      size = (3.5, 3.5)
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    MouseComponent mouseA_2
      timeRelativeTo = experiment
      stopVal [duration (s)] = 20
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = never
  Routine Place_Bird_In_Box
    TextComponent FirstRoutine
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Place the bird in the box and close and lock the door.

        Once the bird is settled, press space button to start the experiment.
    KeyboardComponent PressSpace
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine FoodReward
    CodeComponent code4food
      Begin Routine:
        feeder_open = False
      Each Frame:
        #if FeederOpening.status == STARTED:
        #    if not feeder_open:
        #        feeder_open = True
        #        feeder_start = t # current time
        #        servo.setAccel(0,-2)      #set servo 0 acceleration to -2
        #        servo.setTarget(0,4500)  #move servo to feed
        #        servo.setAccel(10,-2)      #set servo 0 acceleration to -4
        #        servo.setTarget(10,6000)
        #if FeederClosing.status == STARTED:
        #    servo.setAccel(0,-2)      #set servo 0 acceleration to -2
        #    servo.setTarget(0,6000)  #move servo to resting position
        #    servo.setAccel(10,-2)      #set servo 0 acceleration to -4
        #    servo.setTarget(10,4500)
        #    servo.close
        #    feeder_open = False
    TextComponent FeederOpening
      text = Feeder Opening
      stopVal [duration (s)] = 3
      pos = (0, 0.1)
      startVal [time (s)] = 0
      letterHeight = 1
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    TextComponent FeederClosing
      text = Feeder Closing
      stopVal [duration (s)] = .5
      startVal [time (s)] = 3
      letterHeight = 1
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  Routine Beginning_Screen
    CodeComponent importmaestro
      Begin Experiment:
        import maestro
        servo = maestro.Controller('COM4')
        servo.setAccel(0,-2)      #set servo 0 acceleration to -4
        servo.setTarget(0,6000)
        servo.setAccel(10,-2)      #set servo 0 acceleration to -4
        servo.setTarget(10,4500)
    TextComponent text
      text = ...
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ExperimentOver
  Routine Code_For_Servo
    CodeComponent code
      Begin Experiment:
        import serial
        from sys import version_info

        PY2 = version_info[0] == 2   #Running Python 2.x?

        #
        #---------------------------
        # Maestro Servo Controller
        #---------------------------
        #
        # Support for the Pololu Maestro line of servo controllers
        #
        # Steven Jacobs -- Aug 2013
        # https://github.com/FRC4564/Maestro/
        #
        # These functions provide access to many of the Maestro's capabilities using the
        # Pololu serial protocol
        #
        class Controller:
            # When connected via USB, the Maestro creates two virtual serial ports
            # /dev/ttyACM0 for commands and /dev/ttyACM1 for communications.
            # Be sure the Maestro is configured for "USB Dual Port" serial mode.
            # "USB Chained Mode" may work as well, but hasn't been tested.
            #
            # Pololu protocol allows for multiple Maestros to be connected to a single
            # serial port. Each connected device is then indexed by number.
            # This device number defaults to 0x0C (or 12 in decimal), which this module
            # assumes.  If two or more controllers are connected to different serial
            # ports, or you are using a Windows OS, you can provide the tty port.  For
            # example, '/dev/ttyACM2' or for Windows, something like 'COM3'.
            def __init__(self,ttyStr='/dev/ttyACM0',device=0x0c):
                # Open the command port
                self.usb = serial.Serial(ttyStr)
                # Command lead-in and device number are sent for each Pololu serial command.
                self.PololuCmd = chr(0xaa) + chr(device)
                # Track target position for each servo. The function isMoving() will
                # use the Target vs Current servo position to determine if movement is
                # occuring.  Upto 24 servos on a Maestro, (0-23). Targets start at 0.
                self.Targets = [0] * 24
                # Servo minimum and maximum targets can be restricted to protect components.
                self.Mins = [0] * 24
                self.Maxs = [0] * 24

            # Cleanup by closing USB serial port
            def close(self):
                self.usb.close()

            # Send a Pololu command out the serial port
            def sendCmd(self, cmd):
                cmdStr = self.PololuCmd + cmd
                if PY2:
                    self.usb.write(cmdStr)
                else:
                    self.usb.write(bytes(cmdStr,'latin-1'))

            # Set channels min and max value range.  Use this as a safety to protect
            # from accidentally moving outside known safe parameters. A setting of 0
            # allows unrestricted movement.
            #
            # ***Note that the Maestro itself is configured to limit the range of servo travel
            # which has precedence over these values.  Use the Maestro Control Center to configure
            # ranges that are saved to the controller.  Use setRange for software controllable ranges.
            def setRange(self, chan, min, max):
                self.Mins[chan] = min
                self.Maxs[chan] = max

            # Return Minimum channel range value
            def getMin(self, chan):
                return self.Mins[chan]

            # Return Maximum channel range value
            def getMax(self, chan):
                return self.Maxs[chan]

            # Set channel to a specified target value.  Servo will begin moving based
            # on Speed and Acceleration parameters previously set.
            # Target values will be constrained within Min and Max range, if set.
            # For servos, target represents the pulse width in of quarter-microseconds
            # Servo center is at 1500 microseconds, or 6000 quarter-microseconds
            # Typcially valid servo range is 3000 to 9000 quarter-microseconds
            # If channel is configured for digital output, values < 6000 = Low ouput
            def setTarget(self, chan, target):
                # if Min is defined and Target is below, force to Min
                if self.Mins[chan] > 0 and target < self.Mins[chan]:
                    target = self.Mins[chan]
                # if Max is defined and Target is above, force to Max
                if self.Maxs[chan] > 0 and target > self.Maxs[chan]:
                    target = self.Maxs[chan]
                #
                lsb = target & 0x7f #7 bits for least significant byte
                msb = (target >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x04) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)
                # Record Target value
                self.Targets[chan] = target

            # Set speed of channel
            # Speed is measured as 0.25microseconds/10milliseconds
            # For the standard 1ms pulse width change to move a servo between extremes, a speed
            # of 1 will take 1 minute, and a speed of 60 would take 1 second.
            # Speed of 0 is unrestricted.
            def setSpeed(self, chan, speed):
                lsb = speed & 0x7f #7 bits for least significant byte
                msb = (speed >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x07) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Set acceleration of channel
            # This provide soft starts and finishes when servo moves to target position.
            # Valid values are from 0 to 255. 0=unrestricted, 1 is slowest start.
            # A value of 1 will take the servo about 3s to move between 1ms to 2ms range.
            def setAccel(self, chan, accel):
                lsb = accel & 0x7f #7 bits for least significant byte
                msb = (accel >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x09) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Get the current position of the device on the specified channel
            # The result is returned in a measure of quarter-microseconds, which mirrors
            # the Target parameter of setTarget.
            # This is not reading the true servo position, but the last target position sent
            # to the servo. If the Speed is set to below the top speed of the servo, then
            # the position result will align well with the acutal servo position, assuming
            # it is not stalled or slowed.
            def getPosition(self, chan):
                cmd = chr(0x10) + chr(chan)
                self.sendCmd(cmd)
                lsb = ord(self.usb.read())
                msb = ord(self.usb.read())
                return (msb << 8) + lsb

            # Test to see if a servo has reached the set target position.  This only provides
            # useful results if the Speed parameter is set slower than the maximum speed of
            # the servo.  Servo range must be defined first using setRange. See setRange comment.
            #
            # ***Note if target position goes outside of Maestro's allowable range for the
            # channel, then the target can never be reached, so it will appear to always be
            # moving to the target.
            def isMoving(self, chan):
                if self.Targets[chan] > 0:
                    if self.getPosition(chan) != self.Targets[chan]:
                        return True
                return False

            # Have all servo outputs reached their targets? This is useful only if Speed and/or
            # Acceleration have been set on one or more of the channels. Returns True or False.
            # Not available with Micro Maestro.
            def getMovingState(self):
                cmd = chr(0x13)
                self.sendCmd(cmd)
                if self.usb.read() == chr(0):
                    return False
                else:
                    return True

            # Run a Maestro Script subroutine in the currently active script. Scripts can
            # have multiple subroutines, which get numbered sequentially from 0 on up. Code your
            # Maestro subroutine to either infinitely loop, or just end (return is not valid).
            def runScriptSub(self, subNumber):
                cmd = chr(0x27) + chr(subNumber)
                # can pass a param with command 0x28
                # cmd = chr(0x28) + chr(subNumber) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Stop the current Maestro Script
            def stopScript(self):
                cmd = chr(0x24)
                self.sendCmd(cmd)
    TextComponent text_2
      text = ______
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine Place_Bird_In_Box
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = peck_square_positions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'ITI_time': 3, 'position': [5, 0]},
      {'ITI_time': 4, 'position': [0, 11]},
      {'ITI_time': 1, 'position': [-5, 6]},
      {'ITI_time': 1, 'position': [-10, -9]},
      {'ITI_time': 6, 'position': [0, -6]},
      {'ITI_time': 3, 'position': [0, 0]},
      {'ITI_time': 2, 'position': [0, -9]},
      {'ITI_time': 2, 'position': [-9, -5]},
      {'ITI_time': 4, 'position': [2, 8]},
      {'ITI_time': 4, 'position': [9, -8]}]
    Routine Square_Presented
    Routine FoodReward
    Routine ITI
  LoopTerminator trials_2
  Routine experiment_over
