PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = cm
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Show mouse = True
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName, expInfo['date'])
  expName = GrackleFlex
  logging level = data
  Screen = 1
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Routines
  Routine ITI
    PolygonComponent iti
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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  Routine Colortest
    CodeComponent codeforesponse
      Begin Routine:
        skipfoodreward = True
        # setup some python lists for storing info about the mouse
        mouse.x = []
        mouse.y = []
        mouse.leftButton = []
        mouse.midButton = []
        mouse.rightButton = []
        mouse.time = []

        timer.reset()
      End Routine:
        trials.addData('ColorTestTime', timer.getTime())
        trials.addData('SkipFoodReward', skipfoodreward)
        # store data for trials (TrialHandler)
        #trials.addData('mouse.x', mouse.x)
        #trials.addData('mouse.y', mouse.y)
        trials.addData('ColorTestNumPecks', mouse.leftButton)
        #trials.addData('mouse.midButton', mouse.midButton)
        #trials.addData('mouse.rightButton', mouse.rightButton)
        trials.addData('ColorTestPeckTimes', mouse.time)
        timer.reset()
      Each Frame:
        if LEFTrewarded == 'yes':
            if mouse.isPressedIn(ColorStimLEFT):
                skipfoodreward = False
                continueRoutine = False
            if mouse.isPressedIn(ColorStimRIGHT):
                skipfoodreward = True
                continueRoutine = False
        if RIGHTrewarded == 'yes':
            if mouse.isPressedIn(ColorStimLEFT):
                skipfoodreward = True
                continueRoutine = False
            if mouse.isPressedIn(ColorStimRIGHT):
                skipfoodreward = False
                continueRoutine = False

         # *mouse* updates
        if t >= 0 and mouse.status == NOT_STARTED:
            # keep track of start time/frame for later
            mouse.tStart = t
            mouse.frameNStart = frameN  # exact frame index
            mouse.status = STARTED
            event.mouseButtons = [0, 0, 0]  # reset mouse buttons to be 'up'
        frameRemains = 15 - win.monitorFramePeriod * 0.75  # most of one frame period left
        if mouse.status == STARTED and t >= frameRemains:
            mouse.status = STOPPED
        if mouse.status == STARTED:  # only update if started and not stopped!
            buttons = mouse.getPressed()
            if any(mouse.getPressed()):
                x, y = mouse.getPos()
                mouse.x.append(x)
                mouse.y.append(y)
                mouse.leftButton.append(buttons[0])
                mouse.midButton.append(buttons[1])
                mouse.rightButton.append(buttons[2])
                mouse.time.append(ColortestClock.getTime())
            while any(mouse.getPressed()):
                pass
    PolygonComponent ColorStimLEFT
      fillColor [set every repeat] = $colorLEFT
      stopVal [time (s)] = 15
      pos = (-9,-9)
      units = cm
      startVal [time (s)] = 0
      nVertices = 50
      size = (6,6)
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    PolygonComponent ColorStimRIGHT
      fillColor [set every repeat] = $colorRIGHT
      stopVal [time (s)] = 15
      pos = (9, -9)
      units = cm
      startVal [time (s)] = 0
      nVertices = 50
      size = (6,6)
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    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [time (s)] = 15
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0
      saveMouseState = never
  Routine Buffer
    PolygonComponent buffer
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [duration (s)] = .1
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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  Routine Slide_One_Servo_Info
    CodeComponent code
      Begin Experiment:
        import serial
        from sys import version_info

        PY2 = version_info[0] == 2   #Running Python 2.x?

        #
        #---------------------------
        # Maestro Servo Controller
        #---------------------------
        #
        # Support for the Pololu Maestro line of servo controllers
        #
        # Steven Jacobs -- Aug 2013
        # https://github.com/FRC4564/Maestro/
        #
        # These functions provide access to many of the Maestro's capabilities using the
        # Pololu serial protocol
        #
        class Controller:
            # When connected via USB, the Maestro creates two virtual serial ports
            # /dev/ttyACM0 for commands and /dev/ttyACM1 for communications.
            # Be sure the Maestro is configured for "USB Dual Port" serial mode.
            # "USB Chained Mode" may work as well, but hasn't been tested.
            #
            # Pololu protocol allows for multiple Maestros to be connected to a single
            # serial port. Each connected device is then indexed by number.
            # This device number defaults to 0x0C (or 12 in decimal), which this module
            # assumes.  If two or more controllers are connected to different serial
            # ports, or you are using a Windows OS, you can provide the tty port.  For
            # example, '/dev/ttyACM2' or for Windows, something like 'COM3'.
            def __init__(self,ttyStr='/dev/ttyACM0',device=0x0c):
                # Open the command port
                self.usb = serial.Serial(ttyStr)
                # Command lead-in and device number are sent for each Pololu serial command.
                self.PololuCmd = chr(0xaa) + chr(device)
                # Track target position for each servo. The function isMoving() will
                # use the Target vs Current servo position to determine if movement is
                # occuring.  Upto 24 servos on a Maestro, (0-23). Targets start at 0.
                self.Targets = [0] * 24
                # Servo minimum and maximum targets can be restricted to protect components.
                self.Mins = [0] * 24
                self.Maxs = [0] * 24

            # Cleanup by closing USB serial port
            def close(self):
                self.usb.close()

            # Send a Pololu command out the serial port
            def sendCmd(self, cmd):
                cmdStr = self.PololuCmd + cmd
                if PY2:
                    self.usb.write(cmdStr)
                else:
                    self.usb.write(bytes(cmdStr,'latin-1'))

            # Set channels min and max value range.  Use this as a safety to protect
            # from accidentally moving outside known safe parameters. A setting of 0
            # allows unrestricted movement.
            #
            # ***Note that the Maestro itself is configured to limit the range of servo travel
            # which has precedence over these values.  Use the Maestro Control Center to configure
            # ranges that are saved to the controller.  Use setRange for software controllable ranges.
            def setRange(self, chan, min, max):
                self.Mins[chan] = min
                self.Maxs[chan] = max

            # Return Minimum channel range value
            def getMin(self, chan):
                return self.Mins[chan]

            # Return Maximum channel range value
            def getMax(self, chan):
                return self.Maxs[chan]

            # Set channel to a specified target value.  Servo will begin moving based
            # on Speed and Acceleration parameters previously set.
            # Target values will be constrained within Min and Max range, if set.
            # For servos, target represents the pulse width in of quarter-microseconds
            # Servo center is at 1500 microseconds, or 6000 quarter-microseconds
            # Typcially valid servo range is 3000 to 9000 quarter-microseconds
            # If channel is configured for digital output, values < 6000 = Low ouput
            def setTarget(self, chan, target):
                # if Min is defined and Target is below, force to Min
                if self.Mins[chan] > 0 and target < self.Mins[chan]:
                    target = self.Mins[chan]
                # if Max is defined and Target is above, force to Max
                if self.Maxs[chan] > 0 and target > self.Maxs[chan]:
                    target = self.Maxs[chan]
                #
                lsb = target & 0x7f #7 bits for least significant byte
                msb = (target >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x04) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)
                # Record Target value
                self.Targets[chan] = target

            # Set speed of channel
            # Speed is measured as 0.25microseconds/10milliseconds
            # For the standard 1ms pulse width change to move a servo between extremes, a speed
            # of 1 will take 1 minute, and a speed of 60 would take 1 second.
            # Speed of 0 is unrestricted.
            def setSpeed(self, chan, speed):
                lsb = speed & 0x7f #7 bits for least significant byte
                msb = (speed >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x07) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Set acceleration of channel
            # This provide soft starts and finishes when servo moves to target position.
            # Valid values are from 0 to 255. 0=unrestricted, 1 is slowest start.
            # A value of 1 will take the servo about 3s to move between 1ms to 2ms range.
            def setAccel(self, chan, accel):
                lsb = accel & 0x7f #7 bits for least significant byte
                msb = (accel >> 7) & 0x7f #shift 7 and take next 7 bits for msb
                cmd = chr(0x09) + chr(chan) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Get the current position of the device on the specified channel
            # The result is returned in a measure of quarter-microseconds, which mirrors
            # the Target parameter of setTarget.
            # This is not reading the true servo position, but the last target position sent
            # to the servo. If the Speed is set to below the top speed of the servo, then
            # the position result will align well with the acutal servo position, assuming
            # it is not stalled or slowed.
            def getPosition(self, chan):
                cmd = chr(0x10) + chr(chan)
                self.sendCmd(cmd)
                lsb = ord(self.usb.read())
                msb = ord(self.usb.read())
                return (msb << 8) + lsb

            # Test to see if a servo has reached the set target position.  This only provides
            # useful results if the Speed parameter is set slower than the maximum speed of
            # the servo.  Servo range must be defined first using setRange. See setRange comment.
            #
            # ***Note if target position goes outside of Maestro's allowable range for the
            # channel, then the target can never be reached, so it will appear to always be
            # moving to the target.
            def isMoving(self, chan):
                if self.Targets[chan] > 0:
                    if self.getPosition(chan) != self.Targets[chan]:
                        return True
                return False

            # Have all servo outputs reached their targets? This is useful only if Speed and/or
            # Acceleration have been set on one or more of the channels. Returns True or False.
            # Not available with Micro Maestro.
            def getMovingState(self):
                cmd = chr(0x13)
                self.sendCmd(cmd)
                if self.usb.read() == chr(0):
                    return False
                else:
                    return True

            # Run a Maestro Script subroutine in the currently active script. Scripts can
            # have multiple subroutines, which get numbered sequentially from 0 on up. Code your
            # Maestro subroutine to either infinitely loop, or just end (return is not valid).
            def runScriptSub(self, subNumber):
                cmd = chr(0x27) + chr(subNumber)
                # can pass a param with command 0x28
                # cmd = chr(0x28) + chr(subNumber) + chr(lsb) + chr(msb)
                self.sendCmd(cmd)

            # Stop the current Maestro Script
            def stopScript(self):
                cmd = chr(0x24)
                self.sendCmd(cmd)
    TextComponent text_2
      text = ______
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Nopeckblankscreen
    CodeComponent Skiproutineifpresshasbeenmade
      Each Frame:
        if skipblankscreen:
            trials_2.finished=True
            continueRoutine = False
    PolygonComponent blankscreen
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      size = (0.5, 0.5)
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  Routine Trialstart
    CodeComponent code_2
      Begin Experiment:
        from psychopy import core, event
      Begin Routine:
        skipblankscreen = False
        timer = core.Clock()
        event.Mouse(visible = True)


        # setup some python lists for storing info about the mouseA
        mouseA.x = []
        mouseA.y = []
        mouseA.leftButton = []
        mouseA.midButton = []
        mouseA.rightButton = []
        mouseA.time = []
      End Routine:
        trials_2.addData('StartKeyTime', timer.getTime())
        # store data for trials_2 (TrialHandler)
        #trials_2.addData('mouseA.x', mouseA.x)
        #trials_2.addData('mouseA.y', mouseA.y)
        trials_2.addData('StartKeyNumPecks', mouseA.leftButton)
        #trials_2.addData('mouseA.midButton', mouseA.midButton)
        #trials_2.addData('mouseA.rightButton', mouseA.rightButton)
        trials_2.addData('StartKeyPeckTimes', mouseA.time)
        timer.reset()
      Each Frame:
        if mouseA.isPressedIn(startingkey1on):
            skipblankscreen = True
            continueRoutine = False
        if mouseA.isPressedIn(startingkey1off):
            skipblankscreen = True
            continueRoutine = False
        if mouseA.isPressedIn(startingkey2on):
            skipblankscreen = True
            continueRoutine = False
        if mouseA.isPressedIn(startingkey2off):
            skipblankscreen = True
            continueRoutine = False
        if mouseA.isPressedIn(startingkey3on):
            skipblankscreen = True
            continueRoutine = False
        if mouseA.isPressedIn(startingkey3off):
            skipblankscreen = True
            continueRoutine = False
        if mouseA.isPressedIn(startingkey4on):
            skipblankscreen = True
            continueRoutine = False
        if mouseA.isPressedIn(startingkey4off):
            skipblankscreen = True
            continueRoutine = False
        if mouseA.isPressedIn(startingkey5on):
            skipblankscreen = True
            continueRoutine = False
        if mouseA.isPressedIn(startingkey5off):
            skipblankscreen = True
            continueRoutine = False

        # *mouseA* updates
        if t >= 0.0 and mouseA.status == NOT_STARTED:
            # keep track of start time/frame for later
            mouseA.tStart = t
            mouseA.frameNStart = frameN  # exact frame index
            mouseA.status = STARTED
            event.mouseButtons = [0, 0, 0]  # reset mouse buttons to be 'up'
        frameRemains = 0.0 + 5- win.monitorFramePeriod * 0.75  # most of one frame period left
        if mouseA.status == STARTED and t >= frameRemains:
            mouseA.status = STOPPED
        if mouseA.status == STARTED:  # only update if started and not stopped!
            buttons = mouseA.getPressed()
            #if sum(buttons) > 0:  # ie if any button is pressed
            # Record mouse position if a key is pressed
            if any(mouseA.getPressed()):
                x, y = mouseA.getPos()
                mouseA.x.append(x)
                mouseA.y.append(y)
                mouseA.leftButton.append(buttons[0])
                mouseA.midButton.append(buttons[1])
                mouseA.rightButton.append(buttons[2])
                mouseA.time.append(TrialstartClock.getTime())

                # Wait until all buttons are released
            while any(mouseA.getPressed()):
                pass
    MouseComponent mouseA
      timeRelativeTo = routine
      stopVal [duration (s)] = 5
      forceEndRoutineOnPress = False
      startVal [time (s)] = 0.0
      saveMouseState = never
    PolygonComponent startingkey1on
      fillColor = white
      stopVal [time (s)] = 0.7
      pos = (0,-9)
      startVal [time (s)] = 0.0
      nVertices = 3
      size = (6,4)
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    PolygonComponent startingkey1off
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [time (s)] = 1.0
      pos = (0,-9)
      startVal [time (s)] = 0.7
      nVertices = 3
      size = (6,4)
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    PolygonComponent startingkey2on
      fillColor = white
      stopVal [time (s)] = 1.7
      pos = (0,-9)
      startVal [time (s)] = 1.0
      nVertices = 3
      size = (6,4)
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    PolygonComponent startingkey2off
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [time (s)] = 2.0
      pos = (0,-9)
      startVal [time (s)] = 1.7
      nVertices = 3
      size = (6,4)
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    PolygonComponent startingkey3on
      fillColor = white
      stopVal [time (s)] = 2.7
      pos = (0,-9)
      startVal [time (s)] = 2
      nVertices = 3
      size = (6,4)
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    PolygonComponent startingkey3off
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [time (s)] = 3
      pos = (0,-9)
      startVal [time (s)] = 2.7
      nVertices = 3
      size = (6,4)
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    PolygonComponent startingkey4on
      fillColor = white
      stopVal [time (s)] = 3.7
      pos = (0,-9)
      startVal [time (s)] = 3.0
      nVertices = 3
      size = (6,4)
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    PolygonComponent startingkey4off
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [time (s)] = 4.0
      pos = (0,-9)
      startVal [time (s)] = 3.7
      nVertices = 3
      size = (6,4)
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    PolygonComponent startingkey5on
      fillColor = white
      stopVal [time (s)] = 4.7
      pos = (0,-9)
      startVal [time (s)] = 4.0
      nVertices = 3
      size = (6,4)
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    PolygonComponent startingkey5off
      opacity = 0
      fillColor = $[1,1,1]
      stopVal [time (s)] = 5.0
      pos = (0,-9)
      startVal [time (s)] = 4.7
      nVertices = 3
      size = (6,4)
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  Routine FoodReward
    CodeComponent Skipfoodreward
      Each Frame:
        if skipfoodreward:
            continueRoutine = False
    CodeComponent codeforfood
      Begin Routine:
        feeder_open = False
      Each Frame:
        #if FeederOpening.status == STARTED:
            #if not feeder_open:
                #feeder_open = True
                #fe$eder_start = t # current time
                #servo.setAccel(0,-2)      #set servo 0 acceleration to -2
                #servo.setTarget(0,3250)  #move servo to feed
                #servo.setAccel(10,-2) #for light
                #servo.setTarget(10,6000) #turn the light on
        #servo settings are touchy, these will probably need altering to your specifics

        #if FeederClosing.status == STARTED:
            #servo.setAccel(0,-2)      #set servo 0 acceleration to -2
            #servo.setTarget(0,6000)  #move servo to resting position
            #servo.setAccel(10,-2)  #for the light
            #servo.setTarget(10,4500) #turn the light off
            #servo.close
            #feeder_open = False
    TextComponent FeederOpening
      text = Feeder Opening
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 2
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    TextComponent FeederClosing
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 1.5
      letterHeight = 2
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      text:
        Feeder Closing
  Routine Slide_Two_Move_Servo_to_Rest
    CodeComponent importmaestro
      Begin Experiment:
        import maestro
        servo = maestro.Controller('COM4')
        servo.setAccel(0,-2)      #set servo 0 acceleration to -4
        servo.setTarget(0,6000)
        servo.setAccel(10,-2) #for the light
        servo.setTarget(10,4500) #turn the light off
    TextComponent text
      text = ...
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = GrackleFlex_CONDITIONS_LightPurpleReward.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Trial': u'a', 'colorLEFT': u'violet', 'colorRIGHT': u'purple', 'RIGHTrewarded': u'no', 'LEFTrewarded': u'yes'},
      {'Trial': u'b', 'colorLEFT': u'purple', 'colorRIGHT': u'violet', 'RIGHTrewarded': u'yes', 'LEFTrewarded': u'no'},
      {'Trial': u'a', 'colorLEFT': u'violet', 'colorRIGHT': u'purple', 'RIGHTrewarded': u'no', 'LEFTrewarded': u'yes'},
      {'Trial': u'b', 'colorLEFT': u'purple', 'colorRIGHT': u'violet', 'RIGHTrewarded': u'yes', 'LEFTrewarded': u'no'},
      {'Trial': u'a', 'colorLEFT': u'violet', 'colorRIGHT': u'purple', 'RIGHTrewarded': u'no', 'LEFTrewarded': u'yes'},
      {'Trial': u'b', 'colorLEFT': u'purple', 'colorRIGHT': u'violet', 'RIGHTrewarded': u'yes', 'LEFTrewarded': u'no'},
      {'Trial': u'a', 'colorLEFT': u'violet', 'colorRIGHT': u'purple', 'RIGHTrewarded': u'no', 'LEFTrewarded': u'yes'},
      {'Trial': u'b', 'colorLEFT': u'purple', 'colorRIGHT': u'violet', 'RIGHTrewarded': u'yes', 'LEFTrewarded': u'no'},
      {'Trial': u'a', 'colorLEFT': u'violet', 'colorRIGHT': u'purple', 'RIGHTrewarded': u'no', 'LEFTrewarded': u'yes'},
      {'Trial': u'b', 'colorLEFT': u'purple', 'colorRIGHT': u'violet', 'RIGHTrewarded': u'yes', 'LEFTrewarded': u'no'}]
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 100
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      Routine Trialstart
      Routine Nopeckblankscreen
    LoopTerminator trials_2
    Routine Buffer
    Routine Colortest
    Routine FoodReward
    Routine ITI
  LoopTerminator trials
